// template started from CS56PySomaWithoutAxonWithoutTree3ReorderedWithSpine.hoc
// from https://senselab.med.yale.edu/ModelDB/showmodel.cshtml?model=183424&file=/CS56PyModelDB/CS56PySomaWithoutAxonWithoutTree3ReorderedWithSpine.hoc
// using same ion channels as /usr/site/nrniv/local/hoc/PTcell.hoc , but different distribution
// also not using spines?

Vrest       = -94.5896010066
v_init = -94.5896010066
celsius = 34.0 // same as experiment
tstop       = 3000
curr        = 0.300 // stimulus amplitude

// passive properties (optimization proxies)
cap         = 0.800045777348
rall        = 149.477586545
rm          = 44140.5795522
spinecapfactor = 1.10734608835 // not used when == 1.0 since have explicit spine neck/head

//Na, K reversal potentials calculated from BenS internal and external solutions via Nernst equation
p_ek          = -104
p_ena         = 42

// h-current - based on Kole 2006, but parameterized for opt
h_erev      = -37.0 
h_gbar      = 6.18831640879e-06 // mho/cm^2
h_ascale = 0.00472988686303
h_bscale = 0.237190552965
h_ashift = 125.953075226
h_aslope = 12.0204510495
h_bslope = 43.5705352547

// spiking currents
nax_gbar    = 0.0153130368342 
nax_gbar_axonm = nax_gbar_somam = 5

kdr_gbar    = 0.0084715576279
kdr_gbar_axonm = kdr_gbar_somam = 5
// A few kinetic params changed vis-a-vis kdr.mod defaults:
// These param values match the default values in kdr.mod (except where indicated).
kdr_vhalfn  = 13
kdr_a0n     = 0.0075 // def 0.02
kdr_nmax    = 20 // def 2

kap_gbar    = 0.0623117652595
kap_gbar_axonm = kap_gbar_somam = 5
// These param values match the default values in kap.mod (except where indicated).
kap_vhalfn  = 35.4272160793 // def 11
kap_vhalfl  = -64.7941117933
kap_nmin    = 0.4 // def 0.1
kap_lmin    = 5 // def 2
kap_tq      = -48.5921218259 // def -40

// new ion channel parameters
cal_gcalbar = 5.73945708921e-06
can_gcanbar = 4.74427101753e-06
cat_gcatbar = 1.08074219052e-06
//cat_gcatbar = 0.0 * 1e-5
calginc = 1.0
kBK_gpeak = 7.67842640257e-05 // original value of 268e-4 too high for this model
kBK_caVhminShift = 57.5319607107 // shift upwards to get lower effect on subthreshold
cadad_depth = 0.102468419281 // original 1; reduced for tighter coupling of ica and cai
cadad_taur = 16.0181691392 

nap_gbar = 0.00088493411073
ican_gbar = 4.11524905238e-05

begintemplate ITcell

objref all, somatic, axonal, basal, apical, alldend, spiny, perisom
objref stim, esyn, isyn,nil
public all,somatic,basal,apical,spiny,alldend, perisom
public lambda_f,geom_nseg,sethgbar, stim, nc, reconfig
external cap,rall,rm,spinecapfactor,Vrest,h_erev,h_gbar
external h_ascale,h_bscale,h_ashift,h_aslope,h_bslope
external nax_gbar,nax_gbar_axonm,nax_gbar_somam,kdr_gbar,kdr_gbar_axonm,kdr_gbar_somam
external cal_gcalbar, can_gcanbar, cat_gcatbar, kBK_gpeak, kBK_caVhminShift, cadad_depth, cadad_taur
external kap_gbar,kap_gbar_axonm,kap_gbar_somam,p_ek,p_ena, nap_gbar, ican_gbar
external calginc
external kdr_vhalfn, kdr_a0n, kdr_nmax
external kap_vhalfn, kap_vhalfl, kap_nmin, kap_lmin, kap_tq

public mkstim,soma,axon
//stuff for having an interface like intf6 - not all values might actually be relevant and used for mc
public zloc, type, inhib, record, wrec, jttr, input, vinflg, invl0, jcn, dead, vbr, dbx, flag, out,xloc,col,gid,yloc,id
public wrc,recclr, id, recflag, initrec, fflag, fini, esyn, isyn
public getdvi
objref vidx,vdel,ign1,vwt2,vwt1,vdist
objref esyn,esynd[103],isyn,isynd[103] // leave old syns
objref asynl,nsynl,gsynl,g2synl // ampa,nmda,gabaa,gabab
public asynl,nsynl,gsynl,g2synl // ampa,nmda,gabaa,gabab
public soma

proc getdvi(){
  $&1 = vidx
  $&2 = vdel
  $&3 = ign1
  $&4 = vwt1
  $&5 = vwt2
  $&6 = vdist
}

func yloc(){ return 1.0 } // empty funcs
func gid(){ return 1.0 }
func xloc(){ return 1.0 }
func col(){ return 1.0 }
func fini(){ return 1.0 }
func fflag(){ return 0.0 } //return 0 to record APs from soma
func initrec(){ return 1.0 }
func flag(){ return 1.0 }
func recflag(){ return 1.0 }
func wrc(){ return 1.0 }
func recclr(){ return 1.0 }
func clrvspks(){ return 1.0 }

proc celldef() {
  topol()
  subsets()
}

create soma, axon[13], dend[54], apic[27]

proc topol() { local i
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon[i-1](1)
  connect axon[3](0), axon[1](1)
  for i = 4, 11 connect axon[i](0), axon[i-1](1)
  connect axon[12](0), axon[10](1)
  connect dend(0), soma(0.5)
  for i = 1, 3 connect dend[i](0), dend[i-1](1)
  connect dend[4](0), dend[2](1)
  connect dend[5](0), dend[1](1)
  for i = 6, 7 connect dend[i](0), dend[5](1)
  connect dend[8](0), dend(1)
  for i = 9, 10 connect dend[i](0), dend[8](1)
  for i = 11, 12 connect dend[i](0), dend[10](1)
  connect dend[13](0), soma(0.5)
  for i = 14, 15 connect dend[i](0), dend[i-1](1)
  connect dend[16](0), dend[14](1)
  connect dend[17](0), dend[13](1)
  for i = 18, 19 connect dend[i](0), soma(0.5)
  for i = 20, 21 connect dend[i](0), dend[i-1](1)
  connect dend[22](0), dend[20](1)
  connect dend[23](0), dend[19](1)
  for i = 24, 26 connect dend[i](0), dend[i-1](1)
  connect dend[27](0), dend[25](1)
  connect dend[28](0), dend[24](1)
  connect dend[29](0), dend[23](1)
  connect dend[30](0), soma(0.5)
  for i = 31, 33 connect dend[i](0), dend[i-1](1)
  connect dend[34](0), dend[32](1)
  connect dend[35](0), dend[31](1)
  connect dend[36](0), dend[30](1)
  connect dend[37](0), soma(0.5)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), soma(0.5)
  for i = 43, 45 connect dend[i](0), dend[i-1](1)
  connect dend[46](0), dend[44](1)
  connect dend[47](0), dend[43](1)
  connect dend[48](0), dend[47](1)
  connect dend[49](0), dend[42](1)
  for i = 50, 51 connect dend[i](0), dend[i-1](1)
  connect dend[52](0), dend[50](1)
  connect dend[53](0), dend[49](1)
  connect apic(0), soma(0.5)
  for i = 1, 9 connect apic[i](0), apic[i-1](1)
  connect apic[10](0), apic[8](1)
  connect apic[11](0), apic[7](1)
  connect apic[12](0), apic[6](1)
  connect apic[13](0), apic[5](1)
  connect apic[14](0), apic[4](1)
  for i = 15, 16 connect apic[i](0), apic[14](1)
  connect apic[17](0), apic[3](1)
  for i = 18, 19 connect apic[i](0), apic[i-1](1)
  connect apic[20](0), apic[18](1)
  connect apic[21](0), apic[17](1)
  connect apic[22](0), apic[2](1)
  connect apic[23](0), apic[1](1)
  for i = 24, 25 connect apic[i](0), apic[23](1)
  connect apic[26](0), apic(1)
  basic_shape()
}

proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(260.953, -707.203, -97.44, 14.2004)
	pt3dadd(260.688, -707.059, -99.12, 14.2447)
	pt3dadd(260.56, -706.975, -100.8, 14.0688)
	pt3dadd(260.609, -707.054, -102.48, 13.8099)
	pt3dadd(260.467, -706.852, -104.16, 13.953)
	pt3dadd(260.611, -706.93, -105.84, 13.694)
	pt3dadd(260.57, -707.011, -107.52, 13.5855)
  }
  axon {pt3dclear()
	pt3dstyle(1, 260.609, -707.054, -102.476)
	pt3dadd(263.57, -713.52, -103.32, 2.28)
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  }
}

proc shape3d_2() {
  axon[10] {	pt3dadd(331.78, -1123.45, -127.68, 1.1)
	pt3dadd(330.75, -1126.76, -126.84, 1.1)
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  }
}

proc shape3d_3() {
  dend[3] {	pt3dadd(225.94, -775.5, -202.44, 1.18)
	pt3dadd(224.69, -777.92, -203.28, 1.18)
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  }
}

proc shape3d_4() {
  dend[8] {	pt3dadd(247.4, -703.1, -112.56, 1.54)
	pt3dadd(246.96, -702.81, -113.4, 1.54)
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  }
}

proc shape3d_5() {
  dend[12] {	pt3dadd(133.7, -673.63, -224.28, 1.32)
	pt3dadd(131.34, -673.7, -225.12, 1.32)
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  }
}

proc shape3d_6() {
  dend[17] {	pt3dadd(341.19, -659.07, -123.48, 1.25)
	pt3dadd(344.05, -656.87, -125.16, 1.25)
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  }
}

proc shape3d_7() {
  dend[27] {	pt3dadd(193.23, -744.92, -51.24, 1.18)
	pt3dadd(191.25, -743.89, -49.56, 1.18)
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  }
}

proc shape3d_8() {
  dend[33] {	pt3dadd(291.8, -823.57, -32.76, 1.18)
	pt3dadd(291.8, -824.6, -33.6, 1.18)
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  }
}

proc shape3d_9() {
  dend[40] {	pt3dadd(351.33, -687.96, -55.44, 1.18)
	pt3dadd(351.33, -687, -53.76, 1.18)
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  }
}

proc shape3d_10() {
  dend[48] {	pt3dadd(310.17, -778.29, -165.48, 1.32)
	pt3dadd(310.1, -780.64, -165.48, 1.32)
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  }
}

proc shape3d_11() {
  dend[53] {	pt3dadd(192.79, -741.25, -158.76, 1.25)
	pt3dadd(191.76, -740.95, -160.44, 1.25)
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  }
}

proc shape3d_12() {
  apic[7] {	pt3dadd(260.04, -287.83, -74.76, 1.4)
	pt3dadd(260.34, -284.44, -75.6, 1.4)
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  }
}

proc shape3d_13() {
  apic[14] {	pt3dadd(268.5, -515.46, -51.24, 1.4)
	pt3dadd(269.3, -514.87, -49.56, 1.4)
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  }
}

proc shape3d_14() {
  apic[24] {	pt3dadd(152.51, -668.19, -78.12, 1.18)
	pt3dadd(147.51, -669.51, -77.28, 1.18)
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  }
}

proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
}

proc subsets() { local i
  all = new SectionList()
    soma all.append()
    for i=0, 12 axon[i] all.append()
    for i=0, 53 dend[i] all.append()
    for i=0, 26 apic[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 12 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 53 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 26 apic[i] apical.append()

  alldend = new SectionList()
    for i=0, 53 dend[i] alldend.append()
    for i=0, 26 apic[i] alldend.append()

  // spiny sections include all basal dendrites
  // and all but the proximal trunk of the apical dendrites
  // 2010-11-03 Ben Suter: 
  //  that was rule used for PTcell -- revisit if applies for ITcell !!
  spiny = new SectionList()
    for i=2, 26 apic[i] spiny.append()
    for i=0, 53 dend[i] spiny.append()

  // within ~100 um of soma -- based on "Perisomatic inhibition" - TF Freund 2007
  perisom = new SectionList()
    for i=0, 1 axon[i] perisom.append()
    axon[3] perisom.append()
    soma perisom.append()
    for i=0, 1 apic[i] perisom.append()    
    apic[23] perisom.append()
    apic[26] perisom.append()
    for i=0, 2 dend[i] perisom.append()    
    dend[5] perisom.append()
    dend[8] perisom.append()
    dend[10] perisom.append()
    for i=13, 14 dend[i] perisom.append()    
    for i=17, 20 dend[i] perisom.append()    
    for i=23, 26 dend[i] perisom.append()    
    dend[28] perisom.append()
    for i=30, 32 dend[i] perisom.append()    
    for i=35, 37 dend[i] perisom.append()    
    dend[39] perisom.append()
    for i=42, 44 dend[i] perisom.append()    
    for i=47, 50 dend[i] perisom.append()    
    dend[52] perisom.append()
}

func lambda_f () { local i, x1, x2, d1, d2, lam, freq, d_lambda
  // these are reasonable values for most models
  freq = 100      // Hz, frequency at which AC length constant will be computed
  d_lambda = 0.1

  if (n3d() < 2) { return 1e5*sqrt(diam/(4*PI*$1*Ra*cm)) }
  // above was too inaccurate with large variation in 3d diameter
  // so now we use all 3-d points to get a better approximate lambda
  x1 = arc3d(0)
  d1 = diam3d(0)
  lam = 0
  for i=1, n3d()-1 {
    x2 = arc3d(i)
    d2 = diam3d(i)
    lam += (x2 - x1)/sqrt(d1 + d2)
    x1 = x2   d1 = d2
  }
  //  length of the section in units of lambda
  lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm) 
  return L/lam
}

proc geom_nseg () { local freq, d_lambda, before, after, tmp
  // these are reasonable values for most models
  freq = 100      // Hz, frequency at which AC length constant will be computed
  d_lambda = 0.1
  before = 0
  forall { before = before + nseg }
  soma area(0.5) // make sure diam reflects 3d points
  forall { nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  }
  // forsec spiny { nseg = 3 }
  after = 0
  forall { after = after + nseg }
  // print "geom_nseg: changed from ", before, " to ", after, " total segments"
}

proc optimize_nseg () { // Ra, cm, spinecapfactor
  // use worst case Ra, cm values
  forall {
    Ra = $1
    cm = $2
  }
  forsec spiny {
    cm = $3 * cm  // spinecapfactor * cm
    g_pas = $3 / rm // spinecapfactor * (1.0/rm)
  }
  // optimize # of segments per section (do this afer setting Ra, cm)
  geom_nseg()
}

proc addapicchan () {
  forsec apical {
    insert ca_ion
    insert cadad // cadad.mod
    insert cal // cal_mig.mod
    insert can // can_mig.mod
    insert cat // cat_mig.mod
    insert kBK // kBK.mod
    insert ican // can_sidi.mod
    insert nap // nap_sidi.mod
  }
}

proc apicchanprop () {
  forsec apical {
    gcalbar_cal = cal_gcalbar
    gcanbar_can = can_gcanbar
    gcatbar_cat = cat_gcatbar
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
    gbar_nap = nap_gbar
    gbar_ican = ican_gbar
  }
}

proc addbasalchan () {
  forsec basal {
    insert ca_ion
    insert cadad
    insert cal
    insert cat
    insert can
    insert kBK
    insert ican // can_sidi.mod
    insert nap // nap_sidi.mod
  }
}

proc basalchanprop () {
  forsec basal {
    gcalbar_cal = cal_gcalbar
    gcanbar_can = can_gcanbar
    gcatbar_cat = cat_gcatbar
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
    gbar_nap = nap_gbar
    gbar_ican = ican_gbar
  }
}

proc init_once() {  
  forall { // forall within an object just accesses the sections belonging to the object
    insert pas        // passive
    insert dist        // mechanism to keep track of distance from soma even after multisplit
    insert ih // h-current in Ih_kole.mod
    insert nax       // Na current
    insert kdr        // K delayed rectifier current
    insert kap        // K-A current
    insert k_ion
    insert na_ion   
  }
  setallprop()
  addapicchan()
  apicchanprop()
  addbasalchan()
  basalchanprop()
  forsec spiny { 
    cm = spinecapfactor * cm
    // Adjust g_pas to compensate, to keep same time constant
    // This is new as of 2011-02-14, because last week Michele Migliore said that
    // the idea of a spine factor is to "add more membrane".
    // I'm not sure about this, though, I thought I saw models that just
    // increase the capacitance.
    g_pas = spinecapfactor / rm
  }
  optimize_nseg(rall, cap, spinecapfactor)
  setgbarnaxd() // nax in apic,basal dends
  setgbarkapd() // kap in apic,basal dends
  setgbarkdrd() // kdr in apic,basal dends
  sethgbar() // distributes HCN conductance
  soma { 
    insert ca_ion
    insert cadad
    insert cal
    insert cat
    insert can
    insert kBK
    insert ican // can_sidi.mod
    insert nap // nap_sidi.mod
  }
  setsomag() // set conductance values for soma
}

proc reconfig () {
  setallprop() // set initial properties, including g_pas,e_pas,cm,Ra,etc.
  optimize_nseg(rall, cap, spinecapfactor) // set nseg based on passive properties
  apicchanprop() //  initial apic dend properties
  basalchanprop() // initial basal dend properties
  setgbarnaxd() // nax in apic,basal dends
  setgbarkapd() // kap in apic,basal dends
  setgbarkdrd() // kdr in apic,basal dends
  sethgbar() // h in all locations
  setsomag() // soma-specific conductance values
}

proc setallprop () {
  forall {
    // passive
    g_pas       = 1/rm
    Ra          = rall
    cm          = cap
    e_pas       = Vrest
    // h-current
    erev_ih      = h_erev
    // Na current
    gbar_nax    = nax_gbar
    // K delayed rectifier current
    gbar_kdr    = kdr_gbar
    vhalfn_kdr  = kdr_vhalfn
    a0n_kdr     = kdr_a0n
    nmax_kdr    = kdr_nmax
    // K-A current
    gbar_kap    = kap_gbar
    vhalfn_kap  = kap_vhalfn
    vhalfl_kap  = kap_vhalfl
    nmin_kap    = kap_nmin
    lmin_kap    = kap_lmin
    tq_kap      = kap_tq
    // reversal potentials
    ena         = p_ena
    ek          = p_ek
  }
}

proc setsomag () {
  soma {
    gcalbar_cal = cal_gcalbar
    gcanbar_can = can_gcanbar
    gcatbar_cat = cat_gcatbar
    gpeak_kBK = kBK_gpeak
    caVhmin_kBK = -46.08 + kBK_caVhminShift
    depth_cadad = cadad_depth
    taur_cadad = cadad_taur
    gbar_nap = nap_gbar
    gbar_ican = ican_gbar
  }
}

proc setaxong () {     // axon has more I_Na, I_KA, I_KDR, and no I_h
  forsec "axon" {
    // axon has no Ih
    gbar_ih = 0
    // increase the I_Na, I_Ka, and I_KDR
    gbar_nax    = nax_gbar_axonm * nax_gbar
    gbar_kap    = kap_gbar_axonm * kap_gbar
    gbar_kdr    = kdr_gbar_axonm * kdr_gbar
  }
}

proc setgbarnaxd () {
  forsec alldend {
    gbar_nax = nax_gbar
  }
}

proc setgbarkapd () {
  forsec alldend {
    gbar_kap = kap_gbar
  }
}

proc setgbarkdrd () {
  forsec alldend {
    gbar_kdr = kdr_gbar
  }
}

// h-current distribution
proc sethgbar () { local xd
  soma {
    gbar_ih = h_gbar
    ascale_ih = h_ascale
    bscale_ih = h_bscale
    ashift_ih = h_ashift
    aslope_ih = h_aslope
    bslope_ih = h_bslope
  }
  forsec alldend {
    gbar_ih = h_gbar
    ascale_ih = h_ascale
    bscale_ih = h_bscale
    ashift_ih = h_ashift
    aslope_ih = h_aslope
    bslope_ih = h_bslope
  }
}

proc init () {local b,i
  zloc = $1
  type = $2
  id = $3
  access soma
  celldef()
  access soma
  distance()
  init_once()
  //setspinypas()
  //setsyns()
}

endtemplate ITcell
